PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  expName = WMpsilocybin_v2
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine ITI
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    PolygonComponent ITI_fix
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine mem_array
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    CodeComponent placeDotsOnCircle
      Code Type = Py
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      Begin Experiment:
        import numpy as np

        def circ_dist(a, b):
            return np.abs(np.angle(np.exp(1j * (a - b))))

        def sample_angles_bilateral(n, rng, min_sep_deg=25, max_tries=50000):
            min_sep = np.deg2rad(min_sep_deg)
            n_left = n // 2
            n_right = n - n_left

            def rand_angle_left():
                return rng.uniform(np.pi/2, 3*np.pi/2)

            def rand_angle_right():
                a = rng.uniform(-np.pi/2, np.pi/2)
                return a % (2*np.pi)

            angles = []
            tries = 0

            for _ in range(n_left):
                while tries < max_tries:
                    tries += 1
                    a = rand_angle_left()
                    if all(circ_dist(a, b) >= min_sep for b in angles):
                        angles.append(a); break
                else:
                    raise RuntimeError("Failed sampling LEFT angles; lower min_sep_deg.")

            for _ in range(n_right):
                while tries < max_tries:
                    tries += 1
                    a = rand_angle_right()
                    if all(circ_dist(a, b) >= min_sep for b in angles):
                        angles.append(a); break
                else:
                    raise RuntimeError("Failed sampling RIGHT angles; lower min_sep_deg.")

            angles = np.array(angles)
            rng.shuffle(angles)
            return angles

        # stable RNG per participant
        sub = expInfo.get('participant', '0')
        seed = int(''.join([c for c in str(sub) if c.isdigit()]) or 0) + 12345
        rng = np.random.default_rng(seed)

        N_DOTS = 5
        DOT_COLORS = ["red", "green", "blue", "yellow", "magenta"]
      Begin Routine:
        dots = [dot0, dot1, dot2, dot3, dot4]  # NOW this is safe

        r = float(memCircle.size[0]) / 2.0
        cx, cy = memCircle.pos

        angles = sample_angles_bilateral(N_DOTS, rng, min_sep_deg=25)
        dot_pos = np.c_[cx + r*np.cos(angles), cy + r*np.sin(angles)]

        for i, d in enumerate(dots):
            d.pos = dot_pos[i].tolist()
            d.fillColor = DOT_COLORS[i]
            d.lineColor = DOT_COLORS[i]

        # store for later routines
        trial_dot_pos = dot_pos
        trial_dot_colors = DOT_COLORS[:N_DOTS]
        trial_angles = angles
      End Routine:
        thisExp.addData("dot_pos", trial_dot_pos.tolist())
        thisExp.addData("dot_colors", trial_dot_colors)
        thisExp.addData("angles", trial_angles.tolist())
    PolygonComponent mem_fix
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    PolygonComponent memCircle
      lineColor = gray
      shape = circle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    PolygonComponent test_circle
      disabled = True
      shape = circle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    PolygonComponent dot0
      fillColor = white
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent dot1
      fillColor = white
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent dot2
      fillColor = white
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent dot3
      fillColor = white
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    PolygonComponent dot4
      fillColor = white
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delay
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    PolygonComponent delay_fix
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine report
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # Use the same dot stimuli from the array
        dots = [dot0, dot1, dot2, dot3, dot4]

        # Make sure they're actually drawn in this routine
        for d in dots:
            d.setAutoDraw(True)

        # Make sure they keep their colors (in case something reset them)
        for i, d in enumerate(dots):
            d.fillColor = DOT_COLORS[i]
            d.lineColor = DOT_COLORS[i]
            d.opacity = 1.0

        # Place them BELOW the reportCircle in a row, scaled to the circle size
        cx, cy = reportCircle.pos
        r = float(reportCircle.size[0]) / 2.0

        y_opt = cy - (r * 1.4)          # below circle
        x_offsets = np.linspace(-r*1.2, r*1.2, N_DOTS)

        for i, d in enumerate(dots):
            d.pos = (cx + float(x_offsets[i]), float(y_opt))

        # ---- Cursor preview dot setup ----
        cursorDot.setAutoDraw(True)   # draw it in this routine
        cursorDot.opacity = 0.0       # hidden until a color is selected

        # Whole-report state
        reported = [False] * N_DOTS
        resp_angles = [None] * N_DOTS
        phase = "choose_color"
        selected_idx = None

        mouse.clickReset()

        # ---- per-click order + RT tracking ----
        click_order = []              # indices of colors in the order they were placed
        click_rt = []                 # RT (s) for each placement relative to report onset
        report_start = core.getTime() # requires: from psychopy import core (Builder usually has it)

        # ---- decision-time RT (select option -> place on circle) ----
        select_time = None            # timestamp when a color option is selected
        decision_rt = []              # decision time per placed item (s)

        # ---- by-order (no indexing later) ----
        resp_by_order_colors = []
        resp_by_order_angles = []
        true_by_order_angles = []

        # ---- angular error (by-order) ----
        # circular distance in radians on (-pi, pi] mapped to absolute distance in [0, pi]
        def circ_dist(a, b):
            return abs(np.angle(np.exp(1j * (a - b))))

        ang_error_by_order = []       # abs angular error (radians) in report order

        # ---- NEW: degree versions (analysis-friendly) ----
        resp_by_order_deg = []
        true_by_order_deg = []
        ang_error_by_order_deg = []

        def rad_to_deg(a):
            """Map radians to [0, 360)."""
            return (np.degrees(a) + 360) % 360

        def circ_dist_deg(a, b):
            """Circular distance in degrees, returned in [0, 180]."""
            d = rad_to_deg(a) - rad_to_deg(b)
            d = (d + 180) % 360 - 180
            return abs(d)
      Each Frame:
        # Grey out used colors
        for i, d in enumerate(dots):
            d.opacity = 0.25 if reported[i] else 1.0

        # ---- Cursor preview dot behavior (SNAP TO CIRCUMFERENCE) ----
        if phase == "choose_location" and selected_idx is not None:
            cursorDot.opacity = 1.0
            cursorDot.fillColor = DOT_COLORS[selected_idx]
            cursorDot.lineColor = DOT_COLORS[selected_idx]

            mx, my = mouse.getPos()
            cx, cy = reportCircle.pos
            r = float(reportCircle.size[0]) / 2.0

            dx, dy = mx - cx, my - cy
            norm = (dx*dx + dy*dy) ** 0.5

            if norm > 1e-6:
                snap_x = cx + r * dx / norm
                snap_y = cy + r * dy / norm
            else:
                snap_x = cx + r
                snap_y = cy

            cursorDot.pos = (float(snap_x), float(snap_y))
        else:
            cursorDot.opacity = 0.0

        # ---- click handling ----
        buttons = mouse.getPressed()
        if buttons[0]:
            mouse.clickReset()

            if phase == "choose_color":
                # click a dot option
                for i, d in enumerate(dots):
                    if (not reported[i]) and d.contains(mouse):
                        selected_idx = i
                        select_time = core.getTime()   # start decision timer here
                        phase = "choose_location"
                        break

            elif phase == "choose_location":
                # place at the snapped position (optionally require click "near" circle)
                if reportCircle.contains(mouse):

                    sx, sy = cursorDot.pos  # snapped position
                    cx, cy = reportCircle.pos
                    ang = float(np.arctan2(sy - cy, sx - cx))

                    resp_angles[selected_idx] = ang
                    reported[selected_idx] = True

                    # record order + RT since report onset
                    click_order.append(int(selected_idx))
                    click_rt.append(float(core.getTime() - report_start))

                    # record decision RT (select option -> place)
                    if select_time is None:
                        decision_rt.append(None)
                    else:
                        decision_rt.append(float(core.getTime() - select_time))
                    select_time = None  # reset for next item

                    # ---- save values in REPORT ORDER (no indexing later) ----
                    true_ang = float(trial_angles[selected_idx])

                    resp_by_order_colors.append(DOT_COLORS[selected_idx])
                    resp_by_order_angles.append(float(ang))
                    true_by_order_angles.append(true_ang)

                    # radians error
                    ang_error_by_order.append(float(circ_dist(ang, true_ang)))

                    # ---- NEW: degree versions ----
                    resp_deg = float(rad_to_deg(ang))
                    true_deg = float(rad_to_deg(true_ang))

                    resp_by_order_deg.append(resp_deg)
                    true_by_order_deg.append(true_deg)
                    ang_error_by_order_deg.append(float(circ_dist_deg(ang, true_ang)))

                    selected_idx = None
                    phase = "choose_color"

                    if all(reported):
                        continueRoutine = False
      End Routine:
        # Optionally stop drawing dots if you don't want them to persist
        for d in dots:
            d.setAutoDraw(False)

        # stop drawing cursor dot
        cursorDot.setAutoDraw(False)

        thisExp.addData("resp_angles", resp_angles)
        thisExp.addData("true_angles", [float(a) for a in trial_angles])
        thisExp.addData("colors", DOT_COLORS)

        # save order + RT per click
        thisExp.addData("click_order", click_order)
        thisExp.addData("click_rt", click_rt)

        # save decision-time RT per click (select -> place)
        thisExp.addData("decision_rt", decision_rt)

        # save report-ordered versions (analysis-friendly)
        thisExp.addData("resp_by_order_colors", resp_by_order_colors)
        thisExp.addData("resp_by_order_angles", resp_by_order_angles)
        thisExp.addData("true_by_order_angles", true_by_order_angles)

        # save angular error per item (radians) in report order
        thisExp.addData("ang_error_by_order", ang_error_by_order)

        # ---- NEW: save degree-based measures ----
        thisExp.addData("resp_by_order_deg", resp_by_order_deg)
        thisExp.addData("true_by_order_deg", true_by_order_deg)
        thisExp.addData("ang_error_by_order_deg", ang_error_by_order_deg)
    PolygonComponent report_fix
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    PolygonComponent reportCircle
      shape = circle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    PolygonComponent cursorDot
      fillColor = white
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine ITI
    Routine mem_array
    Routine delay
    Routine report
  LoopTerminator trials
