PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/sub-%s/ses-%s/sub-%s_ses-%s_%s_%s' % (expInfo['participant'], expInfo['session'], expInfo['participant'], expInfo['session'], expName, expInfo['date']) 
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = WMpsilocybin_v6
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine ITI
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    PolygonComponent ITI_fix
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine mem_array
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    CodeComponent resetArray_code
      Code Type = Py
      Begin Routine:
        # --- hard reset dot objects each trial (array routine) ---
        dots = [dot0, dot1, dot2, dot3, dot4]
        for d in dots:
            d.setAutoDraw(True)     # if you want them drawn in this routine
            d.opacity = 1.0         # ALWAYS reset opacity
            d.ori = 0               # just in case
      End Routine:
        for d in dots:
            d.setAutoDraw(False)
    PolygonComponent mem_fix
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    PolygonComponent memCircle
      lineColor = gray
      lineWidth = 10
      shape = circle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    PolygonComponent dot0
      fillColor [set every repeat] = $item0_color
      lineColor [set every repeat] = $item0_color
      pos [set every repeat] = (item0_x, item0_y) 
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    PolygonComponent dot1
      fillColor [set every repeat] = $item1_color
      lineColor [set every repeat] = $item1_color
      pos [set every repeat] = (item1_x, item1_y) 
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    PolygonComponent dot2
      fillColor [set every repeat] = $item2_color
      lineColor [set every repeat] = $item2_color
      pos [set every repeat] = (item2_x, item2_y) 
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    PolygonComponent dot3
      fillColor [set every repeat] = $item3_color
      lineColor [set every repeat] = $item3_color
      pos [set every repeat] = (item3_x, item3_y) 
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    PolygonComponent dot4
      fillColor [set every repeat] = $item4_color
      lineColor [set every repeat] = $item4_color
      pos [set every repeat] = (item4_x, item4_y) 
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine delay
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    PolygonComponent delay_fix
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine init
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    CodeComponent code_init
      Code Type = Py
      Begin Experiment:
        import os as _os

        # CREATE SUBJECT-SPECIFIC FOLDERS FOR DESIGN MATRICES
        # assign participant number/session number from psychopy input
        participant_number = expInfo['participant']
        session_number = expInfo['session']

        # set directory (i.e., experiment working directory)
        expDir = _os.path.dirname(_os.path.abspath(__file__))

        # create subject folder, then session folder, then phase folders inside session
        sub_foldername = _os.path.join(expDir, 'subject_designs', f'sub-{participant_number}')
        ses_foldername = _os.path.join(sub_foldername, f'ses-{session_number}')

        # phase folders to create (nested under session)
        phase_subFolder = ['practice', 'main']

        # create the subject folder if it does not already exist
        if not _os.path.exists(sub_foldername):
            _os.makedirs(sub_foldername)
            print(f'List folder successfully created for sub-{participant_number}!')
        else:
            print(f'List folder already exists for sub-{participant_number}...')

        # create the session folder if it does not already exist
        if not _os.path.exists(ses_foldername):
            _os.makedirs(ses_foldername)
            print(f'Session folder successfully created for ses-{session_number}!')
        else:
            print(f'Session folder already exists for ses-{session_number}...')

        # create each phase subfolder within the session folder
        for subfolder in phase_subFolder:
            phase_folder_path = _os.path.join(ses_foldername, subfolder)

            if not _os.path.exists(phase_folder_path):
                _os.makedirs(phase_folder_path)
                print(f'Created phase folder: {subfolder}')
            else:
                print(f'Phase folder {subfolder} already exists...')


        # CREATE SUBJECT-SPECIFIC FOLDERS FOR DATA
        # create main folder
        data_foldername = _os.path.join(expDir, 'data', f'sub-{participant_number}')

        if not _os.path.exists(data_foldername):
            _os.makedirs(data_foldername)
            print(f'Data folder successfully created for sub-{participant_number}!')
        else:
            print(f'Data folder already exists for sub-{participant_number}...')

        # add subfolder for session
        dataSes_foldername = _os.path.join(data_foldername, f'ses-{session_number}')

        if not _os.path.exists(dataSes_foldername):
            _os.makedirs(dataSes_foldername)
            print(f'session subfolder successfully created for ses-{session_number}')
        else:
            print(f'session subfolder already exists for ses-{session_number}')
      Begin Routine:
        import os as _os
        import csv
        import numpy as np

        # -----------------------------
        # SETTINGS
        # -----------------------------
        N_COLORS_PER_TRIAL = 5
        N_TRIALS_MAIN = 125
        N_TRIALS_PRACTICE = 4

        COLOR_POOL_9 = [
            "red", "green", "blue", "yellow", "magenta",
            "cyan", "orange", "white", "black"
        ]

        MIN_SEP_DEG = 10
        RECENT_WINDOW = 12
        RECENT_PENALTY = 1.5

        # fixed circle geometry
        CIRCLE_CENTER_X = 0.0
        CIRCLE_CENTER_Y = 0.0
        CIRCLE_RADIUS = 0.45 / 2.0  # 0.225

        # -----------------------------
        # RNG: stable per (participant, session)
        # -----------------------------
        participant_number = expInfo['participant']
        session_number = expInfo['session']

        sub_int = int(''.join([c for c in str(participant_number) if c.isdigit()]) or 0)
        ses_int = int(''.join([c for c in str(session_number) if c.isdigit()]) or 0)

        # deterministic but different across sessions
        seed = sub_int * 1000 + ses_int + 12345
        rng = np.random.default_rng(seed)

        # -----------------------------
        # Helpers
        # -----------------------------
        def circ_dist(a, b):
            return abs(np.angle(np.exp(1j * (a - b))))

        def sample_angles_bilateral(n, rng, min_sep_deg=25, max_tries=50000):
            min_sep = np.deg2rad(min_sep_deg)
            n_left = n // 2
            n_right = n - n_left

            def rand_angle_left():
                return rng.uniform(np.pi/2, 3*np.pi/2)

            def rand_angle_right():
                return rng.uniform(-np.pi/2, np.pi/2) % (2*np.pi)

            angles = []
            tries = 0

            for _ in range(n_left):
                while tries < max_tries:
                    tries += 1
                    a = rand_angle_left()
                    if all(circ_dist(a, b) >= min_sep for b in angles):
                        angles.append(a)
                        break

            for _ in range(n_right):
                while tries < max_tries:
                    tries += 1
                    a = rand_angle_right()
                    if all(circ_dist(a, b) >= min_sep for b in angles):
                        angles.append(a)
                        break

            angles = np.array(angles)
            rng.shuffle(angles)
            return angles

        def rad_to_deg_360(a):
            return (np.degrees(a) + 360) % 360

        def make_balanced_color_trials(
            n_trials, colors, k_per_trial, rng,
            recent_window=10, recent_penalty=1.0,
            max_restarts=200
        ):
            n_colors = len(colors)
            total_slots = n_trials * k_per_trial
            base = total_slots // n_colors
            rem = total_slots % n_colors

            target = np.full(n_colors, base)
            if rem:
                target[rng.choice(n_colors, rem, replace=False)] += 1

            for _ in range(max_restarts):
                remaining = target.copy()
                trials = []
                recent = []

                ok = True
                for _ in range(n_trials):
                    recent_counts = np.zeros(n_colors)
                    for prev in recent[-recent_window:]:
                        for idx in prev:
                            recent_counts[idx] += 1

                    weights = remaining / (1 + recent_penalty * recent_counts)
                    avail = np.where(remaining > 0)[0]

                    if len(avail) < k_per_trial:
                        ok = False
                        break

                    probs = weights[avail]
                    probs = probs / probs.sum() if probs.sum() > 0 else None
                    chosen = rng.choice(avail, k_per_trial, replace=False, p=probs)

                    for idx in chosen:
                        remaining[idx] -= 1
                        if remaining[idx] < 0:
                            ok = False
                            break

                    trials.append(chosen.tolist())
                    recent.append(chosen.tolist())

                if ok and remaining.sum() == 0:
                    return [[colors[i] for i in trial] for trial in trials]

            raise RuntimeError("Could not generate balanced color trials.")

        # -----------------------------
        # CSV writer
        # -----------------------------
        def write_design_csv(path, rows):
            fieldnames = ["trial", "phase", "trial_n"]

            for i in range(N_COLORS_PER_TRIAL):
                fieldnames += [
                    f"item{i}_color",
                    f"item{i}_x", f"item{i}_y",
                    f"item{i}_angle_rad",
                    f"item{i}_angle_deg",
                ]

            with open(path, "w", newline="") as f:
                w = csv.DictWriter(f, fieldnames=fieldnames)
                w.writeheader()
                for r in rows:
                    w.writerow(r)

        # -----------------------------
        # Paths (session-aware)
        # -----------------------------
        expDir = _os.path.dirname(_os.path.abspath(__file__))
        base_dir = _os.path.join(
            expDir,
            "subject_designs",
            f"sub-{participant_number}",
            f"ses-{session_number}"
        )

        practice_dir = _os.path.join(base_dir, "practice")
        main_dir = _os.path.join(base_dir, "main")
        _os.makedirs(practice_dir, exist_ok=True)
        _os.makedirs(main_dir, exist_ok=True)

        practice_csv = _os.path.join(practice_dir, "practice_design.csv")
        main_csv = _os.path.join(main_dir, "main_design.csv")

        # -----------------------------
        # Skip regeneration if BOTH files already exist
        # -----------------------------
        if _os.path.exists(practice_csv) and _os.path.exists(main_csv):
            print(f"Design matrices already exist for sub-{participant_number} ses-{session_number}. Skipping generation.")
        else:
            print(f"Generating design matrices for sub-{participant_number} ses-{session_number}...")

            # -----------------------------
            # PRACTICE
            # -----------------------------
            practice_colors = make_balanced_color_trials(
                N_TRIALS_PRACTICE,
                COLOR_POOL_9,
                N_COLORS_PER_TRIAL,
                rng,
                RECENT_WINDOW,
                RECENT_PENALTY
            )

            practice_rows = []
            for t, cols in enumerate(practice_colors):
                ang = sample_angles_bilateral(N_COLORS_PER_TRIAL, rng, MIN_SEP_DEG)
                xy = np.c_[CIRCLE_RADIUS * np.cos(ang), CIRCLE_RADIUS * np.sin(ang)]

                row = {"trial": t, "trial_n": t + 1, "phase": "practice"}  # trial_n starts at 1
                for i in range(N_COLORS_PER_TRIAL):
                    row[f"item{i}_color"] = cols[i]
                    row[f"item{i}_x"] = float(xy[i, 0])
                    row[f"item{i}_y"] = float(xy[i, 1])
                    row[f"item{i}_angle_rad"] = float(ang[i])
                    row[f"item{i}_angle_deg"] = float(rad_to_deg_360(ang[i]))

                practice_rows.append(row)

            write_design_csv(practice_csv, practice_rows)

            # -----------------------------
            # MAIN
            # -----------------------------
            main_colors = make_balanced_color_trials(
                N_TRIALS_MAIN,
                COLOR_POOL_9,
                N_COLORS_PER_TRIAL,
                rng,
                RECENT_WINDOW,
                RECENT_PENALTY
            )

            main_rows = []
            for t, cols in enumerate(main_colors):
                ang = sample_angles_bilateral(N_COLORS_PER_TRIAL, rng, MIN_SEP_DEG)
                xy = np.c_[CIRCLE_RADIUS * np.cos(ang), CIRCLE_RADIUS * np.sin(ang)]

                row = {"trial": t, "trial_n": t + 1, "phase": "main"}  # trial_n starts at 1
                for i in range(N_COLORS_PER_TRIAL):
                    row[f"item{i}_color"] = cols[i]
                    row[f"item{i}_x"] = float(xy[i, 0])
                    row[f"item{i}_y"] = float(xy[i, 1])
                    row[f"item{i}_angle_rad"] = float(ang[i])
                    row[f"item{i}_angle_deg"] = float(rad_to_deg_360(ang[i]))

                main_rows.append(row)

            write_design_csv(main_csv, main_rows)

        condFilePractice = practice_csv
        condFileMain = main_csv
      End Routine:
        # READ-IN AND ASSIGN PRACTICE AND MAIN DESIGN MATRICES
        import os as _os

        participant_number = expInfo['participant']
        session_number = expInfo['session']

        expDir = _os.path.dirname(_os.path.abspath(__file__))

        practice_list = _os.path.join(expDir, 'subject_designs', f'sub-{participant_number}', f'ses-{session_number}', 'practice', 'practice_design.csv')

        main_list = _os.path.join(expDir, 'subject_designs', f'sub-{participant_number}', f'ses-{session_number}', 'main', 'main_design.csv')
  Routine whole_report
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    CodeComponent wholeReport_code
      Code Type = Py
      Begin Routine:
        # turn on cursor
        mouse.setVisible(True)
        mouse.clickReset()

        import numpy as np  # OK here if you haven't already imported in Begin Experiment

        N_DOTS = 5

        # Pull trial-specific values from Builder condition columns
        trial_colors = [item0_color, item1_color, item2_color, item3_color, item4_color]
        trial_xy = [
            (float(item0_x), float(item0_y)),
            (float(item1_x), float(item1_y)),
            (float(item2_x), float(item2_y)),
            (float(item3_x), float(item3_y)),
            (float(item4_x), float(item4_y)),
        ]
        trial_angles = np.array([np.arctan2(y, x) for (x, y) in trial_xy], dtype=float)

        # Use the same dot stimuli objects as options
        dots = [dot0, dot1, dot2, dot3, dot4]

        for d in dots:
            d.setAutoDraw(True)

        # Set option colors to THIS TRIAL’S colors
        for i, d in enumerate(dots):
            d.fillColor = trial_colors[i]
            d.lineColor = trial_colors[i]
            d.opacity = 1.0

        # lay options below report circle
        cx, cy = reportCircle.pos
        r = float(reportCircle.size[0]) / 2.0
        y_opt = cy - (r * 1.4)
        x_offsets = np.linspace(-r*1.2, r*1.2, N_DOTS)
        for i, d in enumerate(dots):
            d.pos = (cx + float(x_offsets[i]), float(y_opt))

        # ---- Click accept zone around response wheel ----
        CLICK_BAND_INNER_FRAC = 0.00
        CLICK_BAND_OUTER_FRAC = 1.05

        # ---- Static visual cue settings ----
        ADVANCE_LINEWIDTH = 6
        ADVANCE_LINECOLOR = "red"

        # Save original fixation appearance
        _fix_orig_lineColor = report_fix.lineColor
        _fix_orig_fillColor = report_fix.fillColor
        _fix_orig_opacity = report_fix.opacity
        _fix_orig_lineWidth = getattr(report_fix, "lineWidth", None)

        # cursor preview
        cursorDot.setAutoDraw(True)
        cursorDot.opacity = 0.0

        reported = [False] * N_DOTS
        resp_angles = [None] * N_DOTS
        phase = "choose_color"
        selected_idx = None

        waiting_for_advance = False

        # edge-detect click state
        prev_left = False

        # timing + order
        click_order = []
        click_rt = []
        report_start = core.getTime()

        select_time = None
        decision_rt = []

        # by-order outputs
        resp_by_order_colors = []
        resp_by_order_angles = []
        true_by_order_angles = []
        ang_error_by_order = []

        resp_by_order_deg = []
        true_by_order_deg = []
        ang_error_by_order_deg = []

        def rad_to_deg(a):
            return (np.degrees(a) + 360) % 360

        def circ_dist(a, b):
            return abs(np.angle(np.exp(1j * (a - b))))

        def circ_dist_deg(a, b):
            d = rad_to_deg(a) - rad_to_deg(b)
            d = (d + 180) % 360 - 180
            return abs(d)
      Each Frame:
        # Grey out used colors
        for i, d in enumerate(dots):
            d.opacity = 0.25 if reported[i] else 1.0

        # ---- Static red outline on fixation when waiting ----
        if waiting_for_advance:
            report_fix.lineColor = ADVANCE_LINECOLOR
            report_fix.opacity = 1.0
            if getattr(report_fix, "lineWidth", None) is not None:
                report_fix.lineWidth = ADVANCE_LINEWIDTH
        else:
            report_fix.lineColor = _fix_orig_lineColor
            report_fix.fillColor = _fix_orig_fillColor
            report_fix.opacity = _fix_orig_opacity
            if _fix_orig_lineWidth is not None:
                report_fix.lineWidth = _fix_orig_lineWidth

        # Cursor preview snapped to circumference
        if phase == "choose_location" and selected_idx is not None:
            cursorDot.opacity = 1.0
            cursorDot.fillColor = trial_colors[selected_idx]
            cursorDot.lineColor = trial_colors[selected_idx]

            mx, my = mouse.getPos()
            cx, cy = reportCircle.pos
            r = float(reportCircle.size[0]) / 2.0

            dx, dy = mx - cx, my - cy
            norm = (dx*dx + dy*dy) ** 0.5

            if norm > 1e-6:
                snap_x = cx + r * dx / norm
                snap_y = cy + r * dy / norm
            else:
                snap_x = cx + r
                snap_y = cy

            cursorDot.pos = (float(snap_x), float(snap_y))
        else:
            cursorDot.opacity = 0.0

        # -----------------------------
        # click handling (edge-detected)
        # -----------------------------
        left = mouse.getPressed()[0]
        just_clicked = (left and not prev_left)
        prev_left = left

        if just_clicked:

            if waiting_for_advance:
                if report_fix.contains(mouse):
                    continueRoutine = False

            elif phase == "choose_color":
                for i, d in enumerate(dots):
                    if (not reported[i]) and d.contains(mouse):
                        selected_idx = i
                        select_time = core.getTime()
                        phase = "choose_location"
                        break

            elif phase == "choose_location":
                mx, my = mouse.getPos()
                cx, cy = reportCircle.pos
                r = float(reportCircle.size[0]) / 2.0

                dist = ((mx - cx)**2 + (my - cy)**2) ** 0.5
                inner = CLICK_BAND_INNER_FRAC * r
                outer = CLICK_BAND_OUTER_FRAC * r

                if not (inner <= dist <= outer):
                    pass
                else:
                    sx, sy = cursorDot.pos
                    ang = float(np.arctan2(sy - cy, sx - cx))

                    resp_angles[selected_idx] = ang
                    reported[selected_idx] = True

                    click_order.append(int(selected_idx))
                    click_rt.append(float(core.getTime() - report_start))

                    if select_time is None:
                        decision_rt.append(None)
                    else:
                        decision_rt.append(float(core.getTime() - select_time))
                    select_time = None

                    true_ang = float(trial_angles[selected_idx])

                    resp_by_order_colors.append(trial_colors[selected_idx])
                    resp_by_order_angles.append(float(ang))
                    true_by_order_angles.append(true_ang)

                    ang_error_by_order.append(float(circ_dist(ang, true_ang)))

                    resp_by_order_deg.append(float(rad_to_deg(ang)))
                    true_by_order_deg.append(float(rad_to_deg(true_ang)))
                    ang_error_by_order_deg.append(float(circ_dist_deg(ang, true_ang)))

                    selected_idx = None
                    phase = "choose_color"

                    if all(reported):
                        waiting_for_advance = True
                        phase = "wait_for_advance"

                        # Hide tray to emphasize advance step
                        for d in dots:
                            d.setAutoDraw(False)
      End Routine:
        for d in dots:
            d.setAutoDraw(False)
        cursorDot.setAutoDraw(False)

        # Restore fixation appearance
        report_fix.lineColor = _fix_orig_lineColor
        report_fix.fillColor = _fix_orig_fillColor
        report_fix.opacity = _fix_orig_opacity
        if _fix_orig_lineWidth is not None:
            report_fix.lineWidth = _fix_orig_lineWidth

        thisExp.addData("resp_angles", resp_angles)
        thisExp.addData("true_angles", [float(a) for a in trial_angles])
        thisExp.addData("colors", trial_colors)

        thisExp.addData("click_order", click_order)
        thisExp.addData("click_rt", click_rt)
        thisExp.addData("decision_rt", decision_rt)

        thisExp.addData("resp_by_order_colors", resp_by_order_colors)
        thisExp.addData("resp_by_order_angles", resp_by_order_angles)
        thisExp.addData("true_by_order_angles", true_by_order_angles)
        thisExp.addData("ang_error_by_order", ang_error_by_order)

        thisExp.addData("resp_by_order_deg", resp_by_order_deg)
        thisExp.addData("true_by_order_deg", true_by_order_deg)
        thisExp.addData("ang_error_by_order_deg", ang_error_by_order_deg)

        # turn off cursor
        mouse.setVisible(False)
    PolygonComponent report_fix
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
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    ImageComponent reportCircle_image
      image = stimuli/report_circle.png
      size = (0.4558, 0.4558)
      startVal [time (s)] = 0.0
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    PolygonComponent reportCircle
      lineColor = $(-1.0000, -1.0000, -1.0000)
      lineWidth = 10
      nVertices = 256
      opacity = 0
      shape = circle
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
      vertices = 128
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    PolygonComponent cursorDot
      fillColor = white
      shape = circle
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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  Routine prePhase_blank
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    PolygonComponent prePhase_fix
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine WELCOME_screen
    CodeComponent skip_welcome
      Code Type = Py
      disabled = True
      Begin Routine:
        if int(expInfo['trial_restart']) != 1:
            continueRoutine = False
            return
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    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this portion of the experiment, we will ask you to remember the location of 5 colored dots over a brief period and then report the position of each dot on the screen.

        The following slides will go through more detailed instructions…

        <press SPACE to continue>
    KeyboardComponent welcome_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI_instructScreen
    CodeComponent skip_ITIinstruct
      Code Type = Py
      disabled = True
      Begin Routine:
        if int(expInfo['trial_restart']) != 1:
            continueRoutine = False
            return
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    TextComponent iti_instructText
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Each trial will start with a 1-second fixation period. You should maintain your focus on the small, black square in the middle of the screen throughout the entire experiment.

        The 1-second fixation period will look like this:
    ImageComponent iti_instructImage
      image = instruction_images/iti_instruction.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent iti_continueText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = <press SPACE to continue>
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    KeyboardComponent itiInstruct_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine memArray_instructScreen
    CodeComponent skip_MemArrayInstruct
      Code Type = Py
      disabled = True
      Begin Routine:
        if int(expInfo['trial_restart']) != 1:
            continueRoutine = False
            return
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    TextComponent memArray_instructText
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Next, you will briefly be shown a visual array of 5 colored dots at different spatial locations on the screen.

        The memory array will look something like this:
    ImageComponent memArray_instructImage
      image = instruction_images/memArray_instruction.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent memArray_continueText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = <press SPACE to continue>
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    KeyboardComponent memArray_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delayPeriod_instructScreen
    CodeComponent skip_DelayPeriodInstruct
      Code Type = Py
      disabled = True
      Begin Routine:
        if int(expInfo['trial_restart']) != 1:
            continueRoutine = False
            return
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    TextComponent delayPeriod_instructText
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        After you are briefly shown the memory array, there will be a brief 1-second delay. During this delay, we want you to remember the spatial positions of the 5 colored circles you just saw.

        The delay period screen will look like this:
    ImageComponent delayPeriod_instructImage
      image = instruction_images/delay_instruction.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent delayPeriod_continueText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = <press SPACE to continue>
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    KeyboardComponent delayPeriod_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wholeReport_instructScreen
    CodeComponent skip_WholeReportInstruct
      Code Type = Py
      disabled = True
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      Begin Routine:
        if int(expInfo['trial_restart']) != 1:
            continueRoutine = False
            return
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    TextComponent wholeReport_instructText
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        At the end of each trial, we will ask you to use the computer mouse to report the remembered position of each colored dot you memorized. To do this, you will click on one of the colors below the response circle to choose which colored dot position you will report. After you select the color, you will use the mouse to drag the colored dot to the remembered position. After you make your response, the color option below will become transparent. This indicates that you have already reported the position for that colored dot. You will follow the same response procedure until the remembered positions of all colored dots have been reported.

        The response procedure will look something like this:
    ImageComponent wholeReport_instructImage
      image = instruction_images/report_instruction.png
      pos = (0, -0.2)
      size = (0.5, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent wholeReport_continueText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = <press SPACE to continue>
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    KeyboardComponent wholeReport_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_startScreen
    CodeComponent skip_PracticeStartInstruct
      Code Type = Py
      disabled = True
      Begin Routine:
        if int(expInfo['trial_restart']) != 1:
            continueRoutine = False
            return
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    TextComponent practiceStart_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        We will start with a few practice trials so you can understand the structure of the experiment and how to make responses.

        <press SPACE to continue>
    KeyboardComponent practiceStart_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_doneScreen
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    TextComponent practiceDone_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        All done with the practice trials!

        If you have any questions, please ask the experimenter now…

        <press SPACE when you are ready to continue>
    KeyboardComponent practiceDone_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Main_startScreen
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    TextComponent mainStart_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        We are about to start the main portion of the experiment.

        Please ask the experimenter any final questions you may have…

        <press SPACE when you are ready to start>
    KeyboardComponent mainStart_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine END_screen
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    PolygonComponent end_screen
      fillColor = red
      lineColor = red
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        Congratulations, you are all done with this portion of the experiment!

        <press SPACE to exit>
    KeyboardComponent end_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine selfStart_nextTrial
    CodeComponent skip_SelfStartInstruct
      Code Type = Py
      disabled = True
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      Begin Routine:
        if int(expInfo['trial_restart']) != 1:
            continueRoutine = False
            return
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    TextComponent selfStart_instructText
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        After you report all the colored dot locations (all 5 colors below the circle have become transparent), you will be able to start the next trial on your own. To do this, you will use the mouse to click on the black fixation square in the center of the circle.

        The self-start procedure will look like this:
    ImageComponent selfStart_instructImage
      image = instruction_images/selfInitiate_nextTrial.png
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent selfStart_continueText
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = <press SPACE to continue>
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    KeyboardComponent selfStart_keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine init
  Routine WELCOME_screen
  Routine ITI_instructScreen
  Routine memArray_instructScreen
  Routine delayPeriod_instructScreen
  Routine wholeReport_instructScreen
  Routine selfStart_nextTrial
  Routine Practice_startScreen
  Routine prePhase_blank
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = $practice_list
    loopType = sequential
    nReps = 1
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    Routine ITI
    Routine mem_array
    Routine delay
    Routine whole_report
  LoopTerminator practice_trials
  Routine Practice_doneScreen
  Routine Main_startScreen
  Routine prePhase_blank
  LoopInitiator main_trials loopType="TrialHandler"
    conditionsFile = $main_list
    loopType = sequential
    nReps = 1
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    Routine ITI
    Routine mem_array
    Routine delay
    Routine whole_report
  LoopTerminator main_trials
  Routine END_screen
